PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'lang001', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [3840, 1600]
  expName = lemonlab_syllable_comparison
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine trial
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    SoundComponent sound_1
      durationEstim = 5
      sound [set every repeat] = $stimulus
      startVal [time (s)] = 0.0
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  Routine introduction
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        V nasledujicim poslechovem testu uslysite 132 dlouslabicnych slov - baapa, bapa, baba, baaba

        Vasim ukolem bude urcit, zda samohlaska v PRVNI SLABICE je dlouha, nebo kratka.

        Napr. Kdyz uslysite BAPA, oznacite, ze se jedna o kratkou samohlasku.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial_introduction
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Za chvili se spusti nahravka
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  Routine thank_you
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Dekujeme za vasi ucast
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  Routine trial_decision
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    KeyboardComponent key_resp_syllable
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        Stisknete prosim klavesu

        krátka                               dlouha
        -----                                  -------
        vlevo                                 vpravo
Flow
  Routine introduction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = settings.xlsx
    loopType = random
    nReps = 3
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    conditions:
      [{'stimulus': 'stimuli\\CZ30_baapa_upr.wav'},
      {'stimulus': 'stimuli\\CZ33_baa_upr.wav'},
      {'stimulus': 'stimuli\\CZ35_baapa.wav'},
      {'stimulus': 'stimuli\\CZ35_baapa_upr.wav'},
      {'stimulus': 'stimuli\\CZ36_baa.wav'},
      {'stimulus': 'stimuli\\CZ36_baa_upr.wav'},
      {'stimulus': 'stimuli\\CZ37_baapa.wav'},
      {'stimulus': 'stimuli\\CZ37_baapa_upr.wav'},
      {'stimulus': 'stimuli\\CZ38_baapa.wav'},
      {'stimulus': 'stimuli\\CZ38_baapa_upr.wav'},
      {'stimulus': 'stimuli\\CZ41_baa.wav'},
      {'stimulus': 'stimuli\\CZ41_baa_upr.wav'},
      {'stimulus': 'stimuli\\CZ42_baapa.wav'},
      {'stimulus': 'stimuli\\CZ42_baapa_upr.wav'},
      {'stimulus': 'stimuli\\CZ44_baa_upr.wav'},
      {'stimulus': 'stimuli\\CZ46_baa.wav'},
      {'stimulus': 'stimuli\\CZ46_baa_upr.wav'},
      {'stimulus': 'stimuli\\CZ49_baapa.wav'},
      {'stimulus': 'stimuli\\CZ50_baa_upr.wav'},
      {'stimulus': 'stimuli\\CZ52_baapa.wav'},
      {'stimulus': 'stimuli\\CZ54_baa_upr.wav'},
      {'stimulus': 'stimuli\\CZ57_baa_upr.wav'},
      {'stimulus': 'stimuli\\CZ60_baa_upr.wav'},
      {'stimulus': 'stimuli\\CZ62_baapa.wav'},
      {'stimulus': 'stimuli\\CZ62_baapa_upr.wav'},
      {'stimulus': 'stimuli\\CZ64_baa.wav'},
      {'stimulus': 'stimuli\\CZ64_baa_upr.wav'},
      {'stimulus': 'stimuli\\CZ67_baa.wav'},
      {'stimulus': 'stimuli\\CZ67_baa_upr.wav'},
      {'stimulus': 'stimuli\\CZ68_baapa.wav'},
      {'stimulus': 'stimuli\\CZ68_baapa_upr.wav'},
      {'stimulus': 'stimuli\\CZ69_baa.wav'},
      {'stimulus': 'stimuli\\CZ2_baa_upr.wav'},
      {'stimulus': 'stimuli\\CZ4_baa_upr.wav'},
      {'stimulus': 'stimuli\\CZ5_baapa.wav'},
      {'stimulus': 'stimuli\\CZ5_baapa_upr.wav'},
      {'stimulus': 'stimuli\\CZ9_baapa.wav'}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
    Routine trial_introduction
    Routine trial
    Routine trial_decision
  LoopTerminator trials
  Routine thank_you
